CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:35
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^Nephrin_Chip(?P<Plate>.*)_Col(?P<col>.*)_Row(?P<row>.*)_Seq(?P<seq>.*)_(?P<channel>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does channel "DNA")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does channel "Mito")
    Name to assign these images:CellBody
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does channel "Nephrin")
    Name to assign these images:Target
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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
    Select the input image:CellBody
    Name the output image:CropCellBody
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:0,525
    Top and bottom rectangle positions:0,525
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    Remove empty rows and columns?:All
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
Crop:[module_num:6|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
    Select the input image:Target
    Name the output image:CropTarget
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:0,525
    Top and bottom rectangle positions:0,525
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    Remove empty rows and columns?:All
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
Crop:[module_num:7|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
    Select the input image:DNA
    Name the output image:CropDNA
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:0,525
    Top and bottom rectangle positions:0,525
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    Remove empty rows and columns?:All
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:CropDNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:200
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:CropCellBody
    Name the output image:IllumCellBody
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:200
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:10|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
    Select the input image:CropTarget
    Name the output image:IllumTarget
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:550
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:11|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
    Select the input image:CropCellBody
    Name the output image:CorrCellBody
    Select the illumination function:IllumCellBody
    Select how the illumination function is applied:Divide
    Select the input image:CropDNA
    Name the output image:CorrDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:CropTarget
    Name the output image:CorrTarget
    Select the illumination function:IllumTarget
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

MeasureImageQuality:[module_num:12|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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:CorrCellBody, CorrDNA, CorrTarget
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:CorrDNA
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):15,65
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:30
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.0035,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:14|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enabled:False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
    Select the input objects:IdentifyPrimaryObjects
    Name the objects to be identified:CellBody
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:CorrCellBody
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    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNucleiISO
    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.00,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifySecondaryObjects:[module_num:15|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
    Select the input objects:IdentifyPrimaryObjects
    Name the objects to be identified:Nephrin
    Select the method to identify the secondary objects:Propagation
    Select the input image:CorrTarget
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    Regularization factor:1
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei_target
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0045,1.0
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    Size of adaptive window:400
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    Thresholding method:Sauvola

IdentifySecondaryObjects:[module_num:16|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
    Select the input objects:IdentifyPrimaryObjects
    Name the objects to be identified:CellBody_new
    Select the method to identify the secondary objects:Propagation
    Select the input image:CorrCellBody
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    Regularization factor:1
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei_new
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.003,1.0
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    Size of adaptive window:200
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    Thresholding method:Sauvola

MaskImage:[module_num:17|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
    Select the input image:CorrTarget
    Name the output image:MaskBlue
    Use objects or an image as a mask?:Objects
    Select object for mask:CellBody_new
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    Invert the mask?:No

MaskObjects:[module_num:18|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
    Select objects to be masked:Nephrin
    Name the masked objects:MaskedNuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CellBody_new
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureObjectIntensity:[module_num:19|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
    Select images to measure:CorrCellBody, CorrDNA, CorrTarget
    Select objects to measure:CellBody_new, FilteredNuclei_new, FilteredNuclei_target, Nephrin

RescaleIntensity:[module_num:20|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
    Select the input image:CorrTarget
    Name the output image:RescaleIntensityNephrin
    Rescaling method:Stretch each image to use the full intensity range
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
MeasureObjectSizeShape:[module_num:21|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
    Select object sets to measure:CellBody_new, FilteredNuclei_new, FilteredNuclei_target, MaskedNuclei, Nephrin
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectNeighbors:[module_num:22|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
    Select objects to measure:CellBody_new
    Select neighboring objects to measure:CellBody_new
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensity:[module_num:23|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
    Select images to measure:CorrCellBody, CorrDNA, CorrTarget
    Select objects to measure:CellBody_new, FilteredNuclei_new, FilteredNuclei_target, MaskedNuclei, Nephrin

MeasureObjectIntensityDistribution:[module_num:24|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
    Select images to measure:CorrCellBody, CorrDNA, CorrTarget
    Hidden:2
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Nephrin
    Object to use as center?:Centers of other objects
    Select objects to use as centers:FilteredNuclei_target
    Select objects to measure:CellBody_new
    Object to use as center?:Centers of other objects
    Select objects to use as centers:FilteredNuclei_new
    Scale the bins?:Yes
    Number of bins:4
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
MeasureImageAreaOccupied:[module_num:25|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
    Measure the area occupied by:Objects
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    Select object sets to measure:CellBody_new, FilteredNuclei_new, FilteredNuclei_target, MaskedNuclei, Nephrin

MeasureGranularity:[module_num:26|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
    Select images to measure:CorrCellBody, CorrDNA, CorrTarget
    Measure within objects?:Yes
    Select objects to measure:CellBody_new, FilteredNuclei_new, FilteredNuclei_target, MaskedNuclei, Nephrin
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureTexture:[module_num:27|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
    Select images to measure:CorrCellBody, CorrDNA, CorrTarget
    Select objects to measure:CellBody_new, FilteredNuclei_new, FilteredNuclei_target, MaskedNuclei, Nephrin
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

OverlayOutlines:[module_num:28|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CorrTarget
    Name the output image:OrigOverlay_nephrin
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Nephrin
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    Select objects to display:IdentifyPrimaryObjects

OverlayOutlines:[module_num:29|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CorrCellBody
    Name the output image:OrigOverlay_pha
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:CellBody_new
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    Select objects to display:IdentifyPrimaryObjects

DisplayDataOnImage:[module_num:30|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
    Display object or image measurements?:Object
    Select the input objects:FilteredNuclei_new
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:OrigOverlay_pha
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage_cellbody
    Font size (points):13
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:bold

DisplayDataOnImage:[module_num:31|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
    Display object or image measurements?:Object
    Select the input objects:Nephrin
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:OrigOverlay_nephrin
    Text color:blue
    Name the output image that has the measurements displayed:DisplayImage_nephrin
    Font size (points):13
    Number of decimals:1
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:bold

SaveImages:[module_num:32|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage_cellbody
    Select method for constructing file names:From image filename
    Select image name for file prefix:CellBody
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder|Z:\\\\1 BIS\\\\Shared folders\\\\Nikita\\\\Marta\\\\SCREEN\\\\analysis\\\\chip10\\\\SegmentatedImages\\\\chip08
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:33|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage_nephrin
    Select method for constructing file names:From image filename
    Select image name for file prefix:Target
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder|Z:\\\\1 BIS\\\\Shared folders\\\\Nikita\\\\Marta\\\\SCREEN\\\\analysis\\\\chip10\\\\SegmentatedImages\\\\chip08
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:34|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|Z:\\\\1 BIS\\\\Shared folders\\\\Nikita\\\\Marta\\\\SCREEN\\\\analysis\\\\chip10\\\\SegmentatedImages\\\\chip08
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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
ExportToDatabase:[module_num:35|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
    Output file location:Default Output Folder|Z:\\\\1 BIS\\\\Shared folders\\\\Nikita\\\\Marta\\\\SCREEN\\\\analysis\\\\chip10\\\\SegmentatedImages\\\\chip08
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:FilteredNuclei_new,IdentifyPrimaryObjects,Nephrin
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
    Select the plate metadata:Plate
    Select the well metadata:Well
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:IdentifyPrimaryObjects
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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